PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['conditions.csv', 'imgs\\box.png', 'imgs\\apple.png', 'imgs\\banana.png', 'imgs\\continue.png', 'imgs\\empty-box.png', 'imgs\\end-experiment.png', 'imgs\\grapes.png', 'imgs\\pear.png', 'imgs\\strawberry.png', 'imgs\\watermelon.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = eightBoxes
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Routines
  Routine part1
    CodeComponent code2
      Code Type = Auto->JS
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      Begin Experiment:
        DEBUG = True
        RANDOMIZE = True

        N_BOXES = 8

        # Half-width of side of square (% screen height)
        BOX_HALF_WIDTH = 0.1

        box_width = BOX_HALF_WIDTH * 2
        obj_width = box_width * 0.9

        if DEBUG:
            OBJ_DURATION = 1.0
            SHOW_TIMER = True
        else:
            OBJ_DURATION = 3.0 # Seconds (set to 3.0)
            SHOW_TIMER = False # Set to False

        BLANK_DURATION = OBJ_DURATION

        BOX_SIZE = (box_width, box_width)
        OBJ_SIZE = (obj_width, obj_width)

        BLANK_SIZE = OBJ_SIZE

        # Boxes ------------------------------------------

        BOX_POS = (
            (-3 * BOX_HALF_WIDTH,  BOX_HALF_WIDTH),
            (    -BOX_HALF_WIDTH,  BOX_HALF_WIDTH),
            (     BOX_HALF_WIDTH,  BOX_HALF_WIDTH),
            ( 3 * BOX_HALF_WIDTH,  BOX_HALF_WIDTH),
            (-3 * BOX_HALF_WIDTH, -BOX_HALF_WIDTH),
            (    -BOX_HALF_WIDTH, -BOX_HALF_WIDTH),
            (     BOX_HALF_WIDTH, -BOX_HALF_WIDTH),
            ( 3 * BOX_HALF_WIDTH, -BOX_HALF_WIDTH),
        )

        boxes = []
        for i in range(8):
            boxes.append(visual.ImageStim(
                win=win,
                name=f"box{i + 1}",
                image="imgs/box.png",
                pos=BOX_POS[i],
                size=BOX_SIZE,
                opacity=0.5
            ))

        highlighter = visual.ImageStim(
            win=win,
            name="highlighter",
            image="imgs/box.png",
            pos=BOX_POS[i],
            size=BOX_SIZE,
            opacity=0.5
        )

        # Objects ----------------------------------------

        IMG_PATHS = (
            "imgs/apple.png",
            "imgs/banana.png",
            "imgs/grapes.png",
            "imgs/pear.png",
            "imgs/strawberry.png",
            "imgs/watermelon.png",
        )

        objs6 = []
        for i in range(6):
            objs6.append(visual.ImageStim(
                win=win,
                name=f"obj{i + 1}",
                image=IMG_PATHS[i],
                pos=(0, 0),
                size=OBJ_SIZE,
                opacity=1.0
            ))

        # Fixed positions --------------------------------

        # Remember: 0-based index
        if not RANDOMIZE:
            OBJ_POS = {
                "Practice trial": [2, 5],
                "Trial 1": [1, 7],
                "Trial 2": [0, 3, 5],
                "Trial 3": [1, 2, 4, 6],
                "Trial 4": [1, 3, 4, 7],
                "Trial 5": [0, 2, 4, 6, 7],
                "Trial 6": [0, 2, 3, 4, 5, 7],
            }

        # Others -----------------------------------------

        CONT_BUTTON_SIZE = (0.32, 0.112)

        cont_button = visual.ImageStim(
            win=win,
            name="cont_button",
            image="imgs/continue.png",
            pos=(0, -0.4),
            size=(0, 0)
        )

        idxs8 = [0, 1, 2, 3, 4, 5, 6, 7]
        idx = None
      Begin Routine:
        cont_button.setSize((0, 0), log=False)
        cont_button.setAutoDraw(False, log=False)

        objs = []
        visible = []
        visible_t = []
        for i in range(N_BOXES):
            boxes[i].autoDraw = True
            objs.append(None)
            visible.append(False)
            visible_t.append(None)

        #for box in boxes:
        #    box.autoDraw = True
        #objs = [None, None, None, None, None, None, None, None]
        #visible = [False, False, False, False, False, False, False, False]
        #visible_t = [None, None, None, None, None, None, None, None]

        if RANDOMIZE:
            shuffle(objs6)
            shuffle(idxs8)
            idxs = idxs8[:n_fruits]
        else:
            idxs = OBJ_POS[trial_name]

        correct_boxes = []
        for i in range(n_fruits):
            idx = idxs[i]
            objs[idx] = objs6[i]
            objs[idx].setPos(BOX_POS[idx], log=False)
            correct_boxes.append(f"box{idx + 1}")
        correct_boxes.sort()

        # Fill the rest with blanks
        for i in range(8):
            if objs[i] is None:
                objs[i] = visual.ImageStim(
                    win=win,
                    name=f"blank{i + 1}",
                    image="imgs/empty-box.png",
                    pos=BOX_POS[i],
                    size=BLANK_SIZE
                )

        # ----

        # Collections
        clicked_boxes = []
        click_times = []

        # Flags
        initial_reveal = True
        first_click = True
        update_time_elapsed = False
        show_continue = False
        trial_stop = False

        # Variables
        obj_count = 0
        task_time_start = None
        task_time_elapsed = 0.0

        # Error counts
        omissions = 0
        double_omissions = 0
        comissions = 0
      Each Frame:
        if update_time_elapsed:
            task_time_elapsed = t - task_time_start

        if trial_stop:
            pass
        elif show_continue:
            for box in boxes:
                if box is not None:
                    box.setAutoDraw(False, log=False)
            cont_button.setSize(CONT_BUTTON_SIZE, log=False)
            cont_button.setAutoDraw(True, log=False)
            highlighter.setSize((0, 0), log=False)
            trial_stop = True
        elif initial_reveal:
            for obj in objs:
                if "obj" in obj.name:
                    obj.draw()
            if t > reveal_seconds:
                for obj in objs:
                    obj.setAutoDraw(False, log=False)
                initial_reveal = False
        else:
            highlighter.setSize((0, 0), log=False)
            for i in range(N_BOXES):
                if visible[i]:
                    continue
                if mouse2.isPressedIn(boxes[i]):
                    if first_click:
                        task_time_start = t
                        update_time_elapsed = True
                        first_click = False
                    if "blank" not in objs[i].name:
                        obj_count += 1
                        if obj_count >= n_fruits:
                            update_time_elapsed = False
                    elif "_blank" in objs[i].name:
                        comissions += 1
                    elif boxes[i].name in clicked_boxes:
                        double_omissions += 1
                    else:
                        omissions += 1
                    clicked_boxes.append(boxes[i].name)
                    click_times.append(task_time_elapsed)
                    objs[i].setAutoDraw(True, log=False)
                    visible[i] = True
                    visible_t[i] = t
                    break
                elif boxes[i].contains(mouse2):
                    highlighter.setPos(boxes[i].pos, log=False)
                    highlighter.setSize(BOX_SIZE, log=False)
                    highlighter.draw()
                    break

        for i in range(N_BOXES):
            if visible[i] and t - visible_t[i] >= OBJ_DURATION:
                objs[i].setAutoDraw(False, log=False)
                if "blank" not in objs[i].name:
                    objs[i] = visual.ImageStim(
                        win=win,
                        name=f"{objs[i].name}_blank",
                        image="imgs/empty-box.png",
                        pos=BOX_POS[i],
                        size=BLANK_SIZE
                    )
                visible[i] = False

        if obj_count >= n_fruits and sum(visible) <= 0:
            show_continue = True
      End Routine:
        thisExp.addData("clicked_boxes", clicked_boxes)
        thisExp.addData("click_times", click_times)
        thisExp.addData("time_taken_sec", click_times.pop())
        thisExp.addData("correct_boxes", correct_boxes)

        thisExp.addData("omission_errors", omissions)
        thisExp.addData("double_omission_errors", double_omissions)
        thisExp.addData("comission_errors", comissions)

        total_errors = omissions + double_omissions + comissions

        thisExp.addData("total_errors", total_errors)
    TextComponent text2
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $trial_name
      units = height
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    MouseComponent mouse2
      clickable = cont_button
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    TextComponent debugTimer
      letterHeight = 0.01
      opacity = 0.2
      pos = (0.45, -0.45)
      saveStartStop = False
      startVal [condition] = SHOW_TIMER
      text [set every frame] = $round(task_time_elapsed, 3)
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  Routine instr
    TextComponent text1
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 0.98
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      text:
        Instructions:

        There will be 8 boxes on the screen. Some will contain a (picture of a) fruit, some will be empty (contain a red "X"). At the start of each trial, the positions of all the fruits will be revealed for a short period of time before being hidden.

        You may click/tap on any of the boxes to show its contents. The contents will be visible for some time, during which you may not click that box again, but you can click on other boxes. Clicking on a box with a fruit will remove the fruit from the box, so the next click on the same box will reveal an empty box.

        Your mission, should you choose to accept it (or not), is to find all the fruits as fast as you can. In this series, there will be a practice trial, followed by 6 trials.

        Development notes:
        - Recorded times start on first box clicked/tapped
        - Recorded times end when last fruit is found
        - Image display duration currently set to 1 second (instead of 3)
        - There is an inconspicuous timer near the bottom-right of the screen
    ImageComponent cont1
      image = imgs/continue.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.32, 0.112)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent mouse1
      clickable = cont1
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trial_name', 'Practice trial'), ('reveal_seconds', 4), ('n_fruits', 2)]),
      OrderedDict([('trial_name', 'Trial 1'), ('reveal_seconds', 3), ('n_fruits', 2)]),
      OrderedDict([('trial_name', 'Trial 2'), ('reveal_seconds', 3), ('n_fruits', 3)]),
      OrderedDict([('trial_name', 'Trial 3'), ('reveal_seconds', 3), ('n_fruits', 4)]),
      OrderedDict([('trial_name', 'Trial 4'), ('reveal_seconds', 2), ('n_fruits', 4)]),
      OrderedDict([('trial_name', 'Trial 5'), ('reveal_seconds', 2), ('n_fruits', 5)]),
      OrderedDict([('trial_name', 'Trial 6'), ('reveal_seconds', 2), ('n_fruits', 6)])]
    Routine part1
  LoopTerminator trials
